# Instrument driver configuration file.

[General settings]

# The name is shown in all the configuration windows
name: Rigol Digital Oscilloscope

# The version string should be updated whenever changes are made to this config file
version: 1.0

# Name of folder containing the code defining a custom driver. Do not define this item
# or leave it blank for any standard driver based on the built-in VISA interface.
driver_path: Rigol Digital Oscilloscope

# default interface and address
interface: TCPIP


[Model and options]
# The option section allow instruments with different options to use the same driver

# Check instrument model id at startup (True or False). Default is False
check_model: True

# List of models supported by this driver
model_str_1: DS4014E

# Valid model strings returned by the instrument. Default value = model_str
model_id_1: RIGOL TECHNOLOGIES,DS4014E



# General VISA settings for the instrument.
[VISA settings]

# Enable or disable communication over the VISA protocol (True or False)
# If False, the driver will not perform any operations (unless there is a custom driver).
use_visa = True

# Reset the interface (not the instrument) at startup (True or False).  Default is False
reset: True

# Time (in seconds) before the timing out while waiting for an instrument response. Default is 5
timeout: 10

# Query instrument errors (True or False).  If True, every command sent to the device will
# be followed by an error query.  This is useful when testing new setups, but may degrade
# performance by slowing down the instrument communication. 
query_instr_errors: False 

# Bit mask for checking status byte errors (default is 255, include all errors)
# The bits signal the following errors:
# 0: Operation
# 1: Request control
# 2: Query error
# 3: Device error
# 4: Execution error
# 5: Command error
# 6: User request
# 7: Power on
error_bit_mask: 255

# SCPI string to be used when querying for instrument error messages
error_cmd: 

# Initialization commands are sent to the instrument when starting the driver
# *RST will reset the device, *CLS clears the interface
init: :WAV:FORM ASC

# Boolean string values (used for sending True/False to instrument), default is 1 and 0
str_true: ON
str_false: OFF

# Final commands sent to the instrument when closing the driver
final: 


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
## DATA ##

[Ch1 - Data]
unit: V
x_name: Time
x_unit: s
datatype: VECTOR
permission: READ

[Ch2 - Data]
unit: V
x_name: Time
x_unit: s
datatype: VECTOR
permission: READ

[Ch3 - Data]
unit: V
x_name: Time
x_unit: s
datatype: VECTOR
permission: READ

[Ch4 - Data]
unit: V
x_name: Time
x_unit: s
datatype: VECTOR
permission: READ

## HORIZONTAL ##

[Time/div]
datatype: DOUBLE
def_value: 1.0E-9
unit: s
set_cmd: TIM:MAIN:SCAL
group: Timebase

[Time delay]
datatype: DOUBLE
def_value: 0.0
unit: s
set_cmd: :TIM:MAIN:OFFS
group: Timebase

[# of points]
datatype: DOUBLE
def_value: 1E5
set_cmd: :WAV:POIN
group: Timebase

## TRIGGER ##

[Trig source]
datatype: COMBO
def_value: Channel 1
combo_def_1: Channel 1
combo_def_2: Channel 2
combo_def_3: Channel 3
combo_def_4: Channel 4
combo_def_5: External
combo_def_6: External 5
combo_def_7: AC Line
cmd_def_1: CHAN1
cmd_def_2: CHAN2
cmd_def_3: CHAN3
cmd_def_4: CHAN4
cmd_def_5: EXT
cmd_def_6: EXT5
cmd_def_7: AC

set_cmd: :TRIG:EDG:SOUR
group: Trigger
 
[Trig slope]
datatype: COMBO
def_value: Positive
combo_def_1: Positive
combo_def_2: Negative
combo_def_3: Any
cmd_def_1: POS
cmd_def_2: NEG
cmd_def_3: RFAL
set_cmd: TRIG:EDG:SLOP
group: Trigger
 
[Trig level]
datatype: DOUBLE
def_value: 0.0
unit: V
set_cmd: :TRIG:EDG:LEV
group: Trigger

## CHANNEL 1 ##

[Ch1 - Enabled]
datatype: BOOLEAN
def_value: True
set_cmd: CHAN1:DISP
group: Channel 1
section: Channels

[Ch1 - Coupling]
datatype: COMBO
def_value: DC
combo_def_1: DC
combo_def_2: AC
combo_def_3: Ground
cmd_def_1: DC
cmd_def_2: AC
cmd_def_3: GND
set_cmd: CHAN1:COUP
group: Channel 1
section: Channels

[Ch1 - Impedance]
datatype: COMBO
def_value: 1 MOhm
combo_def_1: 1 MOhm
combo_def_2: 50 Ohm
cmd_def_1: OMEG
cmd_def_2: FIFT
set_cmd: CHAN1:IMP
group: Channel 1
section: Channels

[Ch1 - Volt/div]
datatype: DOUBLE
def_value: 1.0
unit: V
set_cmd: CHAN1:SCAL
group: Channel 1
section: Channels

[Ch1 - Offset]
datatype: DOUBLE
def_value: 0.0
unit: V
set_cmd: CHAN1:OFFS
group: Channel 1
section: Channels

## CHANNEL 2 ##

[Ch2 - Enabled]
datatype: BOOLEAN
def_value: True
set_cmd: CHAN2:DISP
group: Channel 2
section: Channels

[Ch2 - Coupling]
datatype: COMBO
def_value: DC
combo_def_1: DC
combo_def_2: AC
combo_def_3: Ground
cmd_def_1: DC
cmd_def_2: AC
cmd_def_3: GND
set_cmd: CHAN2:COUP
group: Channel 2
section: Channels

[Ch2 - Impedance]
datatype: COMBO
def_value: 1 MOhm
combo_def_1: 1 MOhm
combo_def_2: 50 Ohm
cmd_def_1: OMEG
cmd_def_2: FIFT
set_cmd: CHAN2:IMP
group: Channel 2
section: Channels

[Ch2 - Volt/div]
datatype: DOUBLE
def_value: 1.0
unit: V
set_cmd: CHAN2:SCAL
group: Channel 2
section: Channels

[Ch2 - Offset]
datatype: DOUBLE
def_value: 0.0
unit: V
set_cmd: CHAN2:OFFS
group: Channel 2
section: Channels

## CHANNEL 3 ##

[Ch3 - Enabled]
datatype: BOOLEAN
def_value: True
set_cmd: CHAN3:DISP
group: Channel 3
section: Channels

[Ch3 - Coupling]
datatype: COMBO
def_value: DC
combo_def_1: DC
combo_def_2: AC
combo_def_3: Ground
cmd_def_1: DC
cmd_def_2: AC
cmd_def_3: GND
set_cmd: CHAN3:COUP
group: Channel 3
section: Channels

[Ch3 - Impedance]
datatype: COMBO
def_value: 1 MOhm
combo_def_1: 1 MOhm
combo_def_2: 50 Ohm
cmd_def_1: OMEG
cmd_def_2: FIFT
set_cmd: CHAN3:IMP
group: Channel 3
section: Channels

[Ch3 - Volt/div]
datatype: DOUBLE
def_value: 1.0
unit: V
set_cmd: CHAN3:SCAL
group: Channel 3
section: Channels

[Ch3 - Offset]
datatype: DOUBLE
def_value: 0.0
unit: V
set_cmd: CHAN3:OFFS
group: Channel 13
section: Channels

## CHANNEL 4 ##

[Ch4 - Enabled]
datatype: BOOLEAN
def_value: True
set_cmd: CHAN4:DISP
group: Channel 4
section: Channels

[Ch4 - Coupling]
datatype: COMBO
def_value: DC
combo_def_1: DC
combo_def_2: AC
combo_def_3: Ground
cmd_def_1: DC
cmd_def_2: AC
cmd_def_3: GND
set_cmd: CHAN4:COUP
group: Channel 4
section: Channels

[Ch4 - Impedance]
datatype: COMBO
def_value: 1 MOhm
combo_def_1: 1 MOhm
combo_def_2: 50 Ohm
cmd_def_1: OMEG
cmd_def_2: FIFT
set_cmd: CHAN4:IMP
group: Channel 4
section: Channels

[Ch4 - Volt/div]
datatype: DOUBLE
def_value: 1.0
unit: V
set_cmd: CHAN4:SCAL
group: Channel 4
section: Channels

[Ch4 - Offset]
datatype: DOUBLE
def_value: 0.0
unit: V
set_cmd: CHAN4:OFFS
group: Channel 4
section: Channels

